PsychoPy2experiment version="2023.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = triggerDemo_pyxid2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent stim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $item
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    TextComponent trial_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .5
      text = ***
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import pyxid2
        import time

        #generate a list of connected xid devices
        devices = pyxid2.get_xid_devices()

        #assign the first device in the list as 'dev'
        #NB if multiple devices are connected (e.g., stimtracker & cedrus response box, this value may need to be changed)
        dev=devices[0]
      Begin Routine:
        #set the pule duration in ms
        dev.set_pulse_duration(15)

        #raise lines in the stimtracker to output unique triggers provided as integer values in the trial spreadsheet under the column 'trig'
        dev.activate_line(bitmask=trig)

        #alternatively you can raise specific lines in the stimtracker by providing integer values (1:8 or 1:16 depending on hardware) or an array or values (e.g., [1,2,8]) in the trial spreadsheet under the column 'lines')
        #dev.activate_line(lines=trig)

        #lines can also be raised conditionally & in combination as in example below:
        #if condition=='audio_trial':
        #    dev.activate_line(lines=[1])
        #if condition=='video_trial':
        #    dev.activate_line(lines=[2])
        #if condition=='audiovisual_trial':
        #    dev.activate_line(lines=[1,2])
  Routine instructions
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = ***
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  Routine thanks
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    TextComponent concl_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Thanks
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = triggers.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'item': 'aaaa', 'trig': 48},
      {'item': 'bbbb', 'trig': 49},
      {'item': 'cccc', 'trig': 48},
      {'item': 'dddd', 'trig': 49},
      {'item': 'eeee', 'trig': 48},
      {'item': 'ffff', 'trig': 49},
      {'item': 'gggg', 'trig': 48}]
    Routine trial
  LoopTerminator trials
  Routine thanks
